PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1, -1, -1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = aqv
  Save excel file = True
  Units = use prefs
  Screen = 2
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Routines
  Routine trial
    ImageComponent image
      pos = (-325, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemoriginal
      size = (512, 512)
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    ImageComponent image_2
      pos = (325, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemteste
      size = (512, 512)
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    TextComponent text
      text = Imagem de Teste
      pos = (0.45, 0.8)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.08
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    TextComponent text_2
      text = Imagem de referência
      pos = (-0.45, 0.8)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.08
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    TextComponent text_3
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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      text:
        Fase de aquecimento
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
    RatingScaleComponent rating_2
      pos = 0, -0.7
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      categoryChoices = Mesmo diagnóstico, Diagnóstico diferente
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  Routine lets
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      text = Aperte qualquer tecla para começar o experimento...
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine experiment
    ImageComponent image_ref
      pos = (-325, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemoriginal
      size = (512, 512)
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    ImageComponent image_test
      pos = (325, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemteste
      size = (512, 512)
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    TextComponent label_ref
      wrapWidth = 10
      text = Imagem de Referência
      pos = (-0.45, 0.8)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.08
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    TextComponent label_teste
      text = Imagem de Teste
      pos = (0.45, 0.8)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.08
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = on click
    RatingScaleComponent rating
      pos = 0, -0.7
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      categoryChoices = Mesmo diagnóstico, Diagnóstico diferente
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  Routine instructions
    TextComponent title
      text = Avaliação de Qualidade Visual
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    TextComponent question
      text = Considerando as imagens de referência e teste, você daria o mesmo diagnóstico para ambas?
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent goon
      text = Aperte qualquer tecla para continuar...
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    MouseComponent mouse_4
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Imagemteste': u'Test_0_10_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_3_50_jpg_bone.png', u'Imagemoriginal': u'Orig_3_bone.png'},
      {u'Imagemteste': u'Test_9_70_jpg_soft.png', u'Imagemoriginal': u'Orig_9_soft.png'}]
    Routine trial
  LoopTerminator trials_2
  Routine lets
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = arquivo (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Imagemteste': u'Test_0_10_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_20_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_30_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_50_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_20_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_30_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_50_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_70_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_1_10_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_20_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_30_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_50_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_20_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_30_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_50_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_70_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_2_10_jp2_bone.png', u'Imagemoriginal': u'Orig_2_bone.png'},
      {u'Imagemteste': u'Test_2_20_jp2_bone.png', u'Imagemoriginal': u'Orig_2_bone.png'}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
    Routine experiment
  LoopTerminator trials
