PsychoPy2experiment version="1.82.01"
Settings
  Monitor = testMonitor
  color = $[-1, -1, -1]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = aqv_noreference
  Units = use prefs
  Screen = 2
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Routines
  Routine trial
    ImageComponent image_2
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemteste
      size = (512, 512)
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    TextComponent text_3
      pos = (0, 0.9)
      text = Fase de teste
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = experiment
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = on click
    RatingScaleComponent rating_2
      pos = 0, -0.7
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      categoryChoices = Normal, Inconclusivo, Alterado
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  Routine lets
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      text = Aperte qualquer tecla para começar o experimento...
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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  Routine experiment
    ImageComponent image_test
      pos = 0, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Imagemteste
      size = (512, 512)
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    RatingScaleComponent rating
      pos = 0, -0.7
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      categoryChoices = Mesmo Diagnóstico, Diagnóstico Diferente
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = on click
  Routine instructions
    TextComponent title
      pos = (0, 0.8)
      text = Avaliação de Qualidade Visual
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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    TextComponent question
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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      text:
        Dada a imagem apresentada, qual seria o seu diagnóstico?
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent goon
      pos = (0, -0.9)
      text = Aperte qualquer tecla para continuar...
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.1
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Imagemteste': u'Test_0_10_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_3_50_jpg_bone.png', u'Imagemoriginal': u'Orig_3_bone.png'},
      {u'Imagemteste': u'Test_9_70_jpg_soft.png', u'Imagemoriginal': u'Orig_9_soft.png'}]
    Routine trial
  LoopTerminator trials_2
  Routine lets
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = arquivo (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Imagemteste': u'Test_0_10_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_20_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_30_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_50_jp2_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_20_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_30_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_50_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_0_70_jpg_bone.png', u'Imagemoriginal': u'Orig_0_bone.png'},
      {u'Imagemteste': u'Test_1_10_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_20_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_30_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_50_jp2_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_20_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_30_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_50_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_1_70_jpg_bone.png', u'Imagemoriginal': u'Orig_1_bone.png'},
      {u'Imagemteste': u'Test_2_10_jp2_bone.png', u'Imagemoriginal': u'Orig_2_bone.png'},
      {u'Imagemteste': u'Test_2_20_jp2_bone.png', u'Imagemoriginal': u'Orig_2_bone.png'}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
    Routine experiment
  LoopTerminator trials
