PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      image = $Imagemoriginal
      size = (0.5, 0.5)
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      image = $Imagemteste
      size = (0.5, 0.5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\..\Users\luana\Documents\AQV\arquivo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Imagemteste': u'Test_0_10.jp2', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =10'},
      {u'Imagemteste': u'Test_0_20.jp2', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =20'},
      {u'Imagemteste': u'Test_0_30.jp2', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =30'},
      {u'Imagemteste': u'Test_0_50.jp2', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =50'},
      {u'Imagemteste': u'Test_0_20.jpg', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =20'},
      {u'Imagemteste': u'Test_0_30.jpg', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =30'},
      {u'Imagemteste': u'Test_0_50.jpg', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =50'},
      {u'Imagemteste': u'Test_0_70.jpg', u'Imagemoriginal': u'Orig_0.png', u'qualidade': u'quality =70'},
      {u'Imagemteste': u'Test_1_10.jp2', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =10'},
      {u'Imagemteste': u'Test_1_20.jp2', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =20'},
      {u'Imagemteste': u'Test_1_30.jp2', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =30'},
      {u'Imagemteste': u'Test_1_50.jp2', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =50'},
      {u'Imagemteste': u'Test_1_20.jpg', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =20'},
      {u'Imagemteste': u'Test_1_30.jpg', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =30'},
      {u'Imagemteste': u'Test_1_50.jpg', u'Imagemoriginal': u'Orig_1.png', u'qualidade': u'quality =50'}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
    Routine trial
  LoopTerminator trials
